PsychoPy2experiment version="3.1.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1280, 800]
  color = $[-1,-1,-1]
  expName = findObjects
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Routines
  Routine testRout
    PolygonComponent testPoly
      fillColor = $[1,-1,-1]
      opacity = 0
      pos = (0, 100)
      shape = rectangle
      size [set every repeat] = $img_w_h
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    ImageComponent testImg
      image [set every repeat] = $cont_path
      pos = (0, 100)
      size [set every repeat] = $img_w_h
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    MouseComponent testMouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      timeRelativeTo = routine
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        def makeCross(pos):
            cross = visual.ShapeStim(win, pos=pos, depth=-2, vertices='cross', size=(5,5), lineColor=[-0.8, -0.8, 1], fillColor=[-0.8, -0.8, 1])
            cross.setAutoDraw(True)
            return cross
      Begin Routine:
        crosses = []
      Each Frame:
        if testMouse.isPressedIn(testPoly):
            crosses.append(makeCross(testMouse.getPos()))
      End Routine:
        for across in crosses:
                across.setAutoDraw(False)
    ImageComponent image
      image [set every repeat] = $targ_path
      pos = (0, -250)
      size = (108, 108)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      units = pix
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  Routine blank3000
    TextComponent blank3000_next_txt
      letterHeight = 40
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Here comes the image...
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  Routine blank500
    TextComponent blank500_txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine count_3
    TextComponent text_count_3
      letterHeight = 100
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 3
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  Routine count_2
    TextComponent text_count_2
      letterHeight = 100
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 2
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  Routine count_1
    TextComponent text_count_1
      letterHeight = 100
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 1
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  Routine welcome_2_routine
    TextComponent text_pre_practice_a
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        We’ll start now with a practice image. Try to click all locations where you can see the object.

        Click here to proceed to the image.
    MouseComponent mouse_2
      clickable = text_pre_practice_a
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 1
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  Routine welcome_routine
    TextComponent txt_welcome
      letterHeight = 20
      startVal [time (s)] = 0.0
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      text:
        Your task in this experiment is to find certain objects in images.

        You will be shown different images with corresponding objects. The object you are to find is always shown under the image. The image is hidden in multiple locations on each image [NOTE: this isn’t true for the placeholder images used here]

        Each time you find an object in the image you are to click it once with the computer mouse (left button). A small blue cross will be left where you’ve clicked. The crosses are there to help you know where you’ve already clicked.

        After you’ve found and clicked on an object at one location, try to find it at a new location and click there, too. [NOTE: again, this isn’t the case with the placeholder image used here]

        Each image is shown for a limited amount of time. Try to find the object in as many locations as possible.
    TextComponent text_welcome_clickme
      letterHeight = 15
      pos = (0, -350)
      startVal [time (s)] = 0
      text = When you're done reading, click here using the mouse.
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    MouseComponent mouse
      clickable = text_welcome_clickme
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = final
      startVal [time (s)] = 8
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  Routine end_routine
    TextComponent text_2
      letterHeight = 25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Thank you! Please wait for the researcher to come over.
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  Routine practice_a
    PolygonComponent practice_poly
      fillColor = $[1,-1,-1]
      opacity = 0
      pos = (0, 100)
      shape = rectangle
      size = [431, 290]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    ImageComponent practice_context
      image [set every repeat] = imgs/contexts/cont_A.jpg
      pos = (0, 100)
      size [set every repeat] = [431, 290]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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    MouseComponent practice_mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      timeRelativeTo = routine
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    CodeComponent code_practice
      Code Type = Py
      Begin Experiment:
        def makeCross(pos):
            cross = visual.ShapeStim(win, pos=pos, depth=-2, vertices='cross', size=(5,5), lineColor=[-0.8, -0.8, 1], fillColor=[-0.8, -0.8, 1])
            cross.setAutoDraw(True)
            return cross
      Begin Routine:
        crosses = []
      Each Frame:
        if testMouse.isPressedIn(practice_poly):
            crosses.append(makeCross(practice_mouse.getPos()))
      End Routine:
        for across in crosses:
                across.setAutoDraw(False)
    ImageComponent practice_target
      image [set every repeat] = imgs/targets/targ_A.jpg
      pos = (0, -250)
      size = (108, 108)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      units = pix
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  Routine feedback_a
    ImageComponent testImg_3
      image [set every repeat] = imgs/instruction/instr_A.jpg
      pos = (0, 100)
      size [set every repeat] = [431, 290]
      startVal [time (s)] = 0.0
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    MouseComponent mouse_feedback
      clickable = text_feedback_continue
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 1
      timeRelativeTo = routine
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    TextComponent text_feedback
      letterHeight = 20
      pos = (0, -200)
      startVal [time (s)] = 0.0
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      text:
        There was one pizza slice in the image, as you can see above. Did you find them all? [note: in the original experiment, the practice object is shown in multiple locations]

        Note that the objects you are to find in the images are sometimes rotated and can have different sizes. [again, this refers to the original images]
    TextComponent text_feedback_continue
      letterHeight = 15
      pos = (0, -370)
      startVal [time (s)] = 0.0
      text = Click here to start the actual test.
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Flow
  Routine welcome_routine
  Routine welcome_2_routine
  Routine practice_a
  Routine feedback_a
  Routine blank500
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = find_targets.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('targ_path', 'imgs/targets/targ_B.jpg'), ('cont_path', 'imgs/contexts/cont_B.jpg'), ('img_w_h', [826, 290])]),
      OrderedDict([('targ_path', 'imgs/targets/targ_1.jpg'), ('cont_path', 'imgs/contexts/cont_1.jpg'), ('img_w_h', [1280, 290])]),
      OrderedDict([('targ_path', 'imgs/targets/targ_2.jpg'), ('cont_path', 'imgs/contexts/cont_2.jpg'), ('img_w_h', [1280, 290])]),
      OrderedDict([('targ_path', 'imgs/targets/targ_3.jpg'), ('cont_path', 'imgs/contexts/cont_3.jpg'), ('img_w_h', [1280, 290])]),
      OrderedDict([('targ_path', 'imgs/targets/targ_4.jpg'), ('cont_path', 'imgs/contexts/cont_4.jpg'), ('img_w_h', [1280, 290])])]
    Routine blank3000
    Routine count_3
    Routine count_2
    Routine count_1
    Routine testRout
    Routine blank500
  LoopTerminator trials
  Routine end_routine
